PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = final_project
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent TestText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to Submit
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    MouseComponent test_mouse
      clickable = $submit_text
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine trial2
    TextComponent testtext
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox2
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent submit_text2
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to Submit
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    MouseComponent test_mouse2
      clickable = $submit_text
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine trial3
    TextComponent test_text3
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox3
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent submit_text3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to Submit
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    MouseComponent test_mouse3
      clickable = $submit_text
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine trial4
    TextComponent test_text4
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox4
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent submit_text4
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to Submit
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    MouseComponent test_mouse4
      clickable = $submit_text
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine trial5
    TextComponent test_text5
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox5
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent submit_text5
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to Submit
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    MouseComponent test_mouse5
      clickable = $submit_text
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine TRIAL1
    TextComponent TRIAL_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Health
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TRIAL2_3
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Weather
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    KeyboardComponent key_resp2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TRIAL3_3
    TextComponent TRIAL2_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Science
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    KeyboardComponent key_resp3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TRIAL4_3
    TextComponent TRIAL3_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Entertainment
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    KeyboardComponent key_resp3_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TRIAL5
    TextComponent TRIAL4_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Animal
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    KeyboardComponent key_resp4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine TRIAL1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = semantic priming/Conditions/final_condition1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'reference': 'fitness', 'test_word': 'f_tn_s_'},
      {'reference': 'exercise ', 'test_word': 'e_e_c_s_'},
      {'reference': 'wellness ', 'test_word': 'w_ll_e_s'},
      {'reference': 'boxes ', 'test_word': '_o_e_s'},
      {'reference': 'table', 'test_word': 't_b_e'}]
    Routine trial
  LoopTerminator trials
  Routine TRIAL2_3
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = semantic priming/Conditions/final_condtion2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'reference': 'climate', 'test_word': 'c_im_t_'},
      {'reference': 'monsoon', 'test_word': 'm_ns_o_'},
      {'reference': 'rainbow', 'test_word': 'r_in_ow'},
      {'reference': 'bedroom', 'test_word': '_ed_o_m'},
      {'reference': 'tshirt', 'test_word': '_s_i_t'}]
    Routine trial2
  LoopTerminator trials_2
  Routine TRIAL3_3
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = semantic priming/Conditions/final_condition3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'reference': 'biology', 'test_word': 'b_ol_g_'},
      {'reference': 'chemisry', 'test_word': 'ch_m_s_ry'},
      {'reference': 'physics', 'test_word': 'p_y_i_s'},
      {'reference': 'window', 'test_word': 'w_n_o_'},
      {'reference': 'jacket', 'test_word': '_ac_e_'}]
    Routine trial3
  LoopTerminator trials_3
  Routine TRIAL4_3
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = semantic priming/Conditions/final_condition4.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'reference': 'music', 'test_word': 'm_s_c'},
      {'reference': 'television', 'test_word': 't_l_vi_i_n'},
      {'reference': 'concert', 'test_word': 'c_nc_r_'},
      {'reference': 'chair ', 'test_word': 'c_ai_'},
      {'reference': 'cupboard', 'test_word': '_u_bo_r_'}]
    Routine trial4
  LoopTerminator trials_4
  Routine TRIAL5
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = semantic priming/Conditions/final_condition5.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'reference': 'mammals', 'test_word': 'm_mm_l_'},
      {'reference': 'habitat', 'test_word': 'h_b_t_t'},
      {'reference': 'reptiles ', 'test_word': 'r_pt_l_'},
      {'reference': 'softboard ', 'test_word': '_of_b_a_d'},
      {'reference': 'speaker ', 'test_word': 's_e_k_r'}]
    Routine trial5
  LoopTerminator trials_5
